// moose




include util.g
/* Calling newly added command for finding the start execution time of the scipt - Aastha - Start 220807 */
starttime
/* Calling newly added command for finding the start execution time of the scipt - Aastha - End 220807 */

float  SIMDT           = 50e-6
float  PLOTDT          = {SIMDT} * 1.0
float  SIMLENGTH       = 0.25
int    N_COMPARTMENT   = 1000
float  CABLE_LENGTH    = 1e-3
float  RA              = 1.0
float  RM              = 4.0
float  CM              = 0.01
float  EM              = -0.065
float  INJECT          = 1e-10
float  DIAMETER        = 1e-6
float  LENGTH          = {CABLE_LENGTH} / {N_COMPARTMENT}

create Neutral /cable
make_compartment /cable/c1 {RA} {RM} {CM} {EM} {INJECT} {DIAMETER} {LENGTH}

int i
for ( i = 2; i <= {N_COMPARTMENT}; i = i + 1 )
	make_compartment /cable/c{i} {RA} {RM} {CM} {EM} 0.0 {DIAMETER} {LENGTH}
	link_compartment /cable/c{i - 1} /cable/c{i}
end

echo "Rallpack 1 model set up."

create HSolve solve
/* Unlike GENESIS, where the solver is informed of all compartments,
 * here any single "seed" compartment from the tree suffices.
 */
setfield /solve path /cable/c1

create Neutral /plot
create Table /plot/v1
create Table /plot/vn
setfield /plot/v1,/plot/vn stepmode 3
addmsg /plot/v1/inputRequest /cable/c1/Vm
addmsg /plot/vn/inputRequest /cable/c1000/Vm

setclock 0 {SIMDT} 0
setclock 1 {SIMDT} 1
setclock 2 {PLOTDT} 0
useclock /cable/##[TYPE=Compartment] 0
useclock /solve 1
useclock /plot/##[TYPE=Table] 2
reset

step {SIMLENGTH} -t
setfield /plot/v1 print "sim_cable.0"
setfield /plot/vn print "sim_cable.x"
echo "Plots written to 'sim_cable.*'"
/* Calling newly added command for finding the end  time of the scipt - Aastha - Start 220807 */
endtime
/* Calling newly added command for finding the end  time of the scipt - Aastha - End 220807 */
quit





